PsychoPy2experiment version="2023.2.3"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=C72EX8CS
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['CUNYid*'], expInfo['Name*'], expInfo['Last name*'], expInfo['date'])
  Experiment info = {'CUNYid*': '', 'Name*': '', 'Last name*': '', 'College*': '["john-jay", "hostos"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1107]
  expName = lextale_en_nsf
  keyboardBackend = ioHub
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Routines
  Routine lextale_en_instructions
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    TextComponent text_lextale_en_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
      wrapWidth = 0.8
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    KeyboardComponent key_resp_lextale_en_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_lextale_en_instructions_continue
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 1.5
      text [set every repeat] = $continue_text
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  Routine lextale_en_practice
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    TextComponent text_lextale_en_practice_label
      color = red
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextComponent text_lextale_en_practice_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_en_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_en_practice_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = REAL
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    TextComponent text_lextale_en_practice_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = FALSE
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  Routine lextale_en_practice_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_lextale_en_practice.corr == 1:
            msg = "Correct!"
        else:
            msg = "Ooo! You made a mistake!"
    TextComponent text_lextale_eng_practice_feedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_lextale_eng_practice_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = nothing
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  Routine lextale_en_check
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    TextComponent text_lextale_en_check
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press the SPACE BAR to begin.
    KeyboardComponent key_resp_lextale_en_check
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lextale_en_trial
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    TextComponent text_lextale_en_trial_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_en_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_en_trial_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = REAL
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    TextComponent text_lextale_en_trial_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = FALSE
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  Routine lextale_en_end
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    TextComponent text_lextale_en_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the activity.

        Thank you for participating!
    KeyboardComponent key_resp_lextale_en_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  LoopInitiator lextale_en_instructions_loop loopType="TrialHandler"
    conditionsFile = instructions/lextale_en_instructions_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions_text': 'This is a vocabulary test in English. \n  \n  You will see 60 letter strings that could be English words.\n  \n  But only a few of them are REAL WORDS.', 'continue_text': 'Press the SPACE BAR to continue'},
      {'instructions_text': 'Please, indicate whether the letter strings that you see are REAL words or not.   \n      \n    You do not have to know the meaning of the words. You just have to indicate if you think the string is a real word or not, even if you do not know the meaning.', 'continue_text': 'Press the SPACE BAR to continue'},
      {'instructions_text': 'BE CAREFUL!   \n      \n    Errors are penalized. Mark as REAL only the words that you think you have seen before.', 'continue_text': 'Press the SPACE BAR to continue'},
      {'instructions_text': "Press the number 1 key if you think that the string is a REAL word. \n    \n    Press the number 0 key if you think that the string is a FALSE word.                        \n    \n    Let's practice a little bit…", 'continue_text': 'Press the SPACE BAR to continue'}]
    Routine lextale_en_instructions
  LoopTerminator lextale_en_instructions_loop
  LoopInitiator lextale_en_practice_loop loopType="TrialHandler"
    conditionsFile = trials/lextale_practice_trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim': 0, 'word': 'platery', 'correct_response': 0},
      {'stim': 0, 'word': 'denial', 'correct_response': 1},
      {'stim': 0, 'word': 'generic', 'correct_response': 1}]
    Routine lextale_en_practice
    Routine lextale_en_practice_feedback
  LoopTerminator lextale_en_practice_loop
  Routine lextale_en_check
  LoopInitiator lextale_en_trial_loop loopType="TrialHandler"
    conditionsFile = trials/lextale_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim': 1, 'word': 'mensible', 'correct_response': 0},
      {'stim': 2, 'word': 'scornful', 'correct_response': 1},
      {'stim': 3, 'word': 'stoutly', 'correct_response': 1},
      {'stim': 4, 'word': 'ablaze', 'correct_response': 1},
      {'stim': 5, 'word': 'kermshaw', 'correct_response': 0},
      {'stim': 6, 'word': 'moonlit', 'correct_response': 1},
      {'stim': 7, 'word': 'lofty', 'correct_response': 1},
      {'stim': 8, 'word': 'hurricane', 'correct_response': 1},
      {'stim': 9, 'word': 'flaw', 'correct_response': 1},
      {'stim': 10, 'word': 'alberation', 'correct_response': 0},
      {'stim': 11, 'word': 'unkempt', 'correct_response': 1},
      {'stim': 12, 'word': 'breeding', 'correct_response': 1},
      {'stim': 13, 'word': 'festivity', 'correct_response': 1},
      {'stim': 14, 'word': 'screech', 'correct_response': 1},
      {'stim': 15, 'word': 'savory', 'correct_response': 1},
      {'stim': 16, 'word': 'plaudate', 'correct_response': 0},
      {'stim': 17, 'word': 'shin', 'correct_response': 1},
      {'stim': 18, 'word': 'fluid', 'correct_response': 1},
      {'stim': 19, 'word': 'spaunch', 'correct_response': 0},
      {'stim': 20, 'word': 'allied', 'correct_response': 1},
      {'stim': 21, 'word': 'slain', 'correct_response': 1},
      {'stim': 22, 'word': 'recipient', 'correct_response': 1},
      {'stim': 23, 'word': 'exprate', 'correct_response': 0},
      {'stim': 24, 'word': 'eloquence', 'correct_response': 1},
      {'stim': 25, 'word': 'cleanliness', 'correct_response': 1},
      {'stim': 26, 'word': 'dispatch', 'correct_response': 1},
      {'stim': 27, 'word': 'rebondicate', 'correct_response': 0}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
    Routine lextale_en_trial
  LoopTerminator lextale_en_trial_loop
  Routine lextale_en_end
